/*
The copyrights of this software are owned by Duke University.
Please refer to the LICENSE.txt and README.txt files for licensing instructions.
The source code can be found on the following GitHub repository: https://github.com/wmglab-duke/ascent
*/

/*
Author: Nikki Pelot
Date created: January 28, 2016

Description:
- Load Ve(x) in mV from text file into NEURON vectors.
- First line in text file: axontotal (length of Ve(x)).
- Subsequent lines: One Ve(x) value per line.

Variables that must be defined in wrapper/params file:
- axontotal (total number of segments = # points in Ve(x))
- VeSpace_fname: String with Ve(x) filename
*/

objref axontotal_tmp
objref VeSpace_file, VeSpace_data

// Read in Ve(x)
proc VeSpace_read() {
	VeSpace_file = new File()
	VeSpace_file.ropen(VeSpace_fname)
	
	// Read in axontotal used to generate the potentials
	// Make sure it matches the value being used in NEURON
	axontotal_tmp = new Vector(1)
	axontotal_tmp.scanf(VeSpace_file,1)
	
	// Error checking
	if (axontotal_tmp.x[0] != axontotal) {
		execerror("Need axontotal_tmp from VeSpace file to match axontotal used in NEURON.")
	}
	
	// Read in Ve(x)
	VeSpace_data = new Vector(axontotal)
	VeSpace_data.scanf(VeSpace_file)
	
	// Close file
	VeSpace_file.close()
}
