/*
The copyrights of this software are owned by Duke University.
Please refer to the LICENSE and README.md files for licensing instructions.
The source code can be found on the following GitHub repository: https://github.com/wmglab-duke/ascent
*/

/*
Author: Nikki Pelot
Date created: February 4, 2016

Description:
- Initialize model neuron
- Take large time steps from t<0 to t=0 to initialize to SS
- Time loop, including applying and recording Ve

Important notes:
- Only check for AP if find_thresh == 1.

Variables that must be defined in wrapper/params file:
- t_initSS
- dt_initSS
- v_init
- checknode_Ve_values
- ap_thresh

Input arg's: 
- Extracellular stimulation amplitude
- Intracellular stimulation amplitude
*/

// Set up the APCount; check all nodes in case tstop is too short for AP to reach checknode1
objref apc[axonnodes]
objref apc_end_min
objref apc_end_max
objref apc_end_min_timevector
objref apc_end_max_timevector
objref apc_node_times

for node_ind=0, axonnodes-1 {
	if (fiber_type == 2) {// myelinated fiber
		s[node_ind*11].sec apc[node_ind] = new APCount(0.5)
	} else {
		s[node_ind].sec    apc[node_ind] = new APCount(0.5)
	}
	apc[node_ind].thresh = ap_thresh	
}

if(fiber_type==3) { //  c fiber built from cFiberBuilder.hoc
	if(c_fiber_model_type==2 && passive_end_nodes==1){ // Tigerholm OR _<Brandon>_
		execerror("Program cannot balance Tigerholm for passive_end_nodes=1, must be 0.")		
	} else if (c_fiber_model_type==2 && passive_end_nodes==0) {
		load_file("balanceTigerholm.hoc")
	}
}

if (saveflag_end_ap_times==1) {

	node_ind_min = int((axonnodes-1)*deltaz*loc_min_end_ap/deltaz)
	node_ind_max = int((axonnodes-1)*deltaz*loc_max_end_ap/deltaz)

	if (fiber_type == 2) {
		s[node_ind_min*11].sec apc_end_min = new APCount(0.5)
		s[node_ind_max*11].sec apc_end_max = new APCount(0.5)
	} else {
		s[node_ind_min].sec apc_end_min = new APCount(0.5)
		s[node_ind_max].sec apc_end_max = new APCount(0.5)
	}

	apc_end_min.thresh = ap_end_thresh
	apc_end_max.thresh = ap_end_thresh

	apc_end_min_timevector = new Vector()
	apc_end_min.record(apc_end_min_timevector)

	apc_end_max_timevector = new Vector()
	apc_end_max.record(apc_end_max_timevector)
}


proc RunSim() {local myamp
	myamp = $1
	
	if (flag_whichstim == 0) {
		stimamp_extra = myamp
	} else if (flag_whichstim == 1) {
		if (fiber_type == 2) {// myelinated fiber
			s[IntraStim_PulseTrain_ind*11].sec stim.amp = myamp
		} else {
			s[IntraStim_PulseTrain_ind].sec stim.amp = myamp
		}
	}

	finitialize(v_init)

	// if Tigerholm, need to balance
	if(fiber_type==3){ 			   //  c fiber built from cFiberBuilder.hoc
		if(c_fiber_model_type==2 && passive_end_nodes==0){ // Tigerholm OR _<Brandon>_
			balance()
		}
	}

	for seg_ind = 0, axontotal-1 {
		s[seg_ind].sec.e_extracellular(0.5) = 0
	}
	
	// Allow time for model to read steady-state using large dt before actually starting stimulation
	t     = t_initSS			// Start before t=0
	dtsav = dt
	dt    = dt_initSS			// Large dt
	while (t <= -dt) {
		fadvance()
	}
	dt = dtsav
	t  = 0
	fcurrent()
	frecord_init()
	
	// Time loop
	for t_ind=0, n_tsteps-1 {
		//print "t = ", t_ind*dt, "ms"
		for seg_ind = 0, axontotal-1 {
			if (flag_extracellular_stim == 1) {
				s[seg_ind].sec.e_extracellular(0.5) = stimamp_extra * VeTime_data.x[t_ind] * VeSpace_data.x[seg_ind]
			}
			// Record Vm and/or gating vs x at single time points
			if (saveflag_gating_space == 1) {
				if (!(fiber_type == 2)) {
					execerror("Vm(x) and gating(x) recording only set up for myelinated fibers")
				}
				// Loop through time points where I want to save spatial distribution
				for time_save_ind = 0, Nchecktimes-1 {
					// Save data if time point is correct and if node of Ranvier
					if ((t_ind == checktime_values.x[time_save_ind]) && ((seg_ind%11) == 0)) {
						if  (saveflag_Vm_space == 1) {
							savevec_Vm_space.o[time_save_ind].x[seg_ind/11] = node[seg_ind/11].v(0.5)
						}
						if ((saveflag_gating_space == 1) && ((seg_ind%11) == 0)) {
							// Can't save gating params of end nodes if using passive end nodes
							if (!((passive_end_nodes == 1) && ((seg_ind == 0)||(seg_ind == axontotal-1)))) {
								// Redundant check because error check above should indicate that it's only implemented for myelinated fibers
								if (fiber_type == 2) {
									savevec_m_space.o[time_save_ind].x[seg_ind/11]  = node[seg_ind/11].m_axnode_myel(0.5)
									savevec_h_space.o[time_save_ind].x[seg_ind/11]  = node[seg_ind/11].h_axnode_myel(0.5)
									savevec_mp_space.o[time_save_ind].x[seg_ind/11] = node[seg_ind/11].mp_axnode_myel(0.5)
									savevec_s_space.o[time_save_ind].x[seg_ind/11]  = node[seg_ind/11].s_axnode_myel(0.5)
								}
							}
						}
					}
				}
			}
		}
		if (flag_extracellular_stim == 1 && saveflag_Ve == 1) {
			savevec_Ve.o[0].x[t_ind] = s[checknode_Ve_values.x[0]].sec.e_extracellular(0.5)
		}
		fadvance()
	}
	
	// Check for at least one action potential at at least one node of Ranvier
	if (find_thresh == 1) {
		print "Checking for AP"
		N_APs = 0
		
		if (find_block_thresh == 1) {
			node_ind = int((axonnodes-1)*deltaz*ap_detect_location/deltaz)

			if (apc[node_ind].time > IntraStim_PulseTrain_delay) { // Detected at least one AP, so didn't get block, so need to raise the lower bound (N_APs<N_minAPs) on the binary search
				//print apc[node_ind].time
				//check_AP = 0			// Detected an action potential
				N_APs = 0
			} else { // Didn't detect an AP, so got block, so need to drop the upper bound (N_APs>=N_minAPs) on the binary search
				N_APs = 1    
			}
		} else if (find_block_thresh == 0) {
			node_ind = int((axonnodes-1)*deltaz*ap_detect_location/deltaz)

			if (apc[node_ind].n >= N_APs) {
				N_APs = apc[node_ind].n			// Detected an action potential
			}


			if (saveflag_ap_loc == 1) { // TODO -- add default to 0, and control to Sim/HocWriter
				apc_node_times = new Vector(axonnodes, 0)
				for loc_node_ind=0, axonnodes-1 {
					apc_node_times.x[loc_node_ind] = apc[loc_node_ind].time
				}

				// find min time, and loc of AP initiation
				// NOTE: assumes you allowed enough time for the AP to propagate the whole length of the fiber
				// If not allowed time for the AP to prop the whole length of the fiber, this could return ends with
				// ap_node_times of 0
				min_ap_time_node_ind = apc_node_times.min_ind()
				min_ap_time = apc_node_times.min()
			}
		}
	}
}
