/*
Author: Nikki Pelot, modified by Eric Musselman
Date created: February 8, 2016

Instructions:
- Open NEURON's rxvt sh
- mpiexec -n <# processors> nrniv -mpi <.hoc filename including ".hoc" file extension>
*/

// Create parallel context instance
// objref pc
// pc = new ParallelContext()

// print "number of processors: ", pc.nhost

//node_channels = 1						// node_channels = 0 for MRG; node_channels = 1 for Schild 1994
if (node_channels == 1) {
	print "WARNING - node_channels = 1. This will cause Myelinated fibers to run with Schild 1994 mechanisms..."
}

if (!((passive_end_nodes == 0) || (passive_end_nodes == 1))) {
	print "passive_end_nodes must be set to 0 or 1"
	execerror("passive_end_nodes must be set to 0 or 1")
}
if (passive_end_nodes==0) {
	print "WARNING - Even though passive_end_nodes was set to 0, all fibers built with cFiberBuilder.hoc (fiber_type = 3, all c_fiber_model_type values) will have passive end nodes..."
}

// Turn on/off extracellular stim
if ((flag_whichstim == 0) && (flag_extracellular_stim == 0)) {
	execerror("Want to find_thresh for extracellular stim, so need flag_extracellular_stim = 1")
}

// SCALING EXTRACELLULAR STIM BY IAPPLIED, DESIRED AMP, AND/OR UNIT CONVERSION
/*
Turn on/off scaling of extracellular stim by Iapplied.
Ve(x) is assumed to be for 1 mA, so if you obtained the potentials with a voltage BC in an FEM,
you might need to scale by the applied current to get the spatial extracellular potentials corresponding
to a 1 mA stim.
However, if you computed potentials for a point source, or used a current or current density BC in an FEM,
then you don't want to scale Iapplied.
*/
flag_Iapplied = 0

// Set default stim amp for extracellular stim (imp if flag_extracellular_stim=1
// but finding thresh or running stimamp_values for an intracellular pulse...unlikely to come up)
stimamp_extra = 0

// Set multiplicative scaling factor such that Ve will be in millivolts (as required for e_extracellular mechanism)
Ve_unitconv = 1000

// Set appropriate initialization potentials (i.e. Vrest)
/*
NOTE: In MRG-style myelinated axons, the resting membrane potential at the nodes is driven by the battery in the non-nodal sections,
whose value is given by e_pas_Vrest in CreateAxon_Myel.hoc. So as a rule of thumb, should set e_pas_Vrest and v_init to the same value.
*/


// ***************************************************************************
// CreateAxon_Myel.hoc
if (fiber_type == 2) {
	load_file("CreateAxon_Myel.hoc")
	CreateAxon_Myel()
}



// ***************************************************************************
// cFiberBuilder.hoc
if (fiber_type == 3) {
	load_file("cFiberBuilder.hoc")
	load_file("CreateAxon_CFiber.hoc")
	CreateAxon_CFiber()
}

	   if 	(fiber_type == 1) { 	v_init = -88.3 				// [mV]
} else if   (fiber_type == 2) { 	v_init = -80 				// See note above !! [mV]
} else if 	(fiber_type == 3) {		v_init = v_init_c_fiber			// [mV]
} else if 	(fiber_type == 2 && flag_model_b_fiber==1) {		v_init = v_init_b_fiber			// [mV]
}

// ***************************************************************************
// Train of intracellular pulses
// NOTE: Define pulsewidth and interspike interval in pw_values and isi_values further down in Wrapper

//objref stim1

if (fiber_type == 2) {// if myelinated fiber, convert node index to compartment index
	intrastim_ind_tmp = IntraStim_PulseTrain_ind*11
} else {
	intrastim_ind_tmp = IntraStim_PulseTrain_ind
}

//s[intrastim_ind_tmp].sec {
//	stim1 		= new trainIClamp()
//	stim1.loc(.5)
//	stim1.del 	= IntraStim_PulseTrain_delay // Delay to first pulse [ms]
//	stim1.PW	= IntraStim_PulseTrain_pw  	 // Defined in pw_values [ms]
//	stim1.train = tstop-stim1.del 			 // Duration of train of pulses [ms]
//	stim1.freq	= IntraStim_PulseTrain_freq  // Frequency of pulses [Hz]
//	stim1.amp	= IntraStim_PulseTrain_amp 	 // Stim amplitude [nA]
//}

// ***************************************************************************	
// IntracellularStim.hoc
load_file("IntracellularStim.hoc")
IntraStim_PulseTrain()

// ***************************************************************************
// Read in Iapplied from file
strdef VeSpace_Iapplied_fname
objref Iapplied_file, Iapplied

// ***************************************************************************
// ExtracellularStim_Time.hoc
strdef VeTime_fname
load_file("ExtracellularStim_Time.hoc")


// ***************************************************************************
// ExtracellularStim_Space.hoc
strdef VeSpace_fname
load_file("ExtracellularStim_Space.hoc")

// ***************************************************************************
// Recording.hoc

// Check time indices
for i = 0, Nchecktimes-1 {
	checktime_values.x[i] = int(checktime_values_ms.x[i]/dt)
}

objref checknode_Ve_values
checknode_Ve_values 			= new Vector(1,0)
if (fiber_type == 2) { // myelinated
	checknode_Ve_values.x[0]	= 11*int((axonnodes-1)/2)
} else { // unmyelinated
	checknode_Ve_values.x[0]	= int((axonnodes-1)/2)
}

load_file("Recording.hoc")

// ***************************************************************************
// Call sequence of procedures/functions for each sim
load_file("RunSim.hoc")

strdef fname_output_Vm_time
strdef fname_output_Vm_space
strdef fname_output_gating_m_time, fname_output_gating_h_time, fname_output_gating_mp_time, fname_output_gating_s_time
strdef fname_output_gating_m_space, fname_output_gating_h_space, fname_output_gating_mp_space, fname_output_gating_s_space
strdef Ve_fname_output, Istim_fname_output
strdef runtime_fname_output
strdef thresh_fname_output
strdef stim_units

if (flag_whichstim == 0) {
	stim_units = "mA"
} else if ((flag_whichstim == 1) || (flag_whichstim == 2)) {
	stim_units = "nA"
}

load_file("Saving.hoc")
load_file("Saving_Runtime.hoc")

if (find_thresh == 1){
	load_file("FindThresh.hoc")
	load_file("Saving_Thresh.hoc")
}

proc run_all(){local myinner, myfiber, myamp, amp_ind
	myinner = $1
	myfiber = $2
	myamp   = $3
	amp_ind = $4

	Recording()

	trun_individual = startsw()

	// Read in Iapplied
	if (flag_Iapplied == 1) {
		sprint(VeSpace_Iapplied_fname, "../%s/data/inputs/TotalAppliedCurrent.dat", sim_path)
		Iapplied_file = new File()
		Iapplied_file.ropen(VeSpace_Iapplied_fname)
		Iapplied = new Vector(1)
		Iapplied.scanf(Iapplied_file)
		Iapplied_file.close()
	}

	// Read in Ve(x)
	if (flag_extracellular_stim == 1) {
		sprint(VeSpace_fname, "../%s/data/inputs/inner%d_fiber%d.dat",sim_path, myinner, myfiber)
		VeSpace_read()
		// Convert to mV (required for e_extracellular)
		VeSpace_data = VeSpace_data.mul(Ve_unitconv)

		if (flag_Iapplied == 1) {
			// Scale by Iapplied so that amplitudes are millivolts per milliamp applied at the electrode
			VeSpace_data = VeSpace_data.mul(1/Iapplied.x[0])
		}
	}

	// Read in Ve(t)
	sprint(VeTime_fname, "../%s/data/inputs/waveform.dat",sim_path)
	if (flag_extracellular_stim == 1) {
		VeTime_read()
	}

	sprint(Ve_fname_output,              "../%s/data/outputs/Ve_inner%d_fiber%d_amp%d.dat",              sim_path, myinner, myfiber, amp_ind)
	sprint(Istim_fname_output,           "../%s/data/outputs/Istim_inner%d_fiber%d_amp%d.dat",           sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_Vm_time,         "../%s/data/outputs/Vm_time_inner%d_fiber%d_amp%d.dat",         sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_gating_m_time,   "../%s/data/outputs/gating_m_time_inner%d_fiber%d_amp%d.dat",   sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_gating_h_time,   "../%s/data/outputs/gating_h_time_inner%d_fiber%d_amp%d.dat",   sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_gating_mp_time,  "../%s/data/outputs/gating_mp_time_inner%d_fiber%d_amp%d.dat",  sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_gating_s_time,   "../%s/data/outputs/gating_s_time_inner%d_fiber%d_amp%d.dat",   sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_Vm_space,        "../%s/data/outputs/Vm_space_inner%d_fiber%d_amp%d.dat",        sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_gating_m_space,  "../%s/data/outputs/gating_m_space_inner%d_fiber%d_amp%d.dat",  sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_gating_h_space,  "../%s/data/outputs/gating_h_space_inner%d_fiber%d_amp%d.dat",  sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_gating_mp_space, "../%s/data/outputs/gating_mp_space_inner%d_fiber%d_amp%d.dat", sim_path, myinner, myfiber, amp_ind)
	sprint(fname_output_gating_s_space,  "../%s/data/outputs/gating_s_space_inner%d_fiber%d_amp%d.dat",  sim_path, myinner, myfiber, amp_ind)


	if (find_thresh == 0) {
		// Run sim
		RunSim(myamp)

		// Save data
		Saving()

		// Save individual run time (for each simulation)
		trun_individual = startsw() - trun_individual
		sprint(runtime_fname_output, "../%s/data/outputs/runtime_inner%d_fiber%d_amp%d.dat", sim_path, myinner, myfiber, amp_ind)
		Saving_Runtime()


	}   else if (find_thresh == 1){
		// Run binary search for thresholds
		FindThresh(myinner)
		// Run sim once more with final thresh from FindThresh()
		RunSim(stimamp)

		// Save threshold value
		sprint(thresh_fname_output, "../%s/data/outputs/thresh_inner%d_fiber%d.dat", sim_path, myinner, myfiber)
		Saving_Thresh()

		// Save data
		Saving()

		// Save individual run time (for each simulation)
		trun_individual = startsw() - trun_individual
		sprint(runtime_fname_output, "../%s/data/outputs/runtime_inner%d_fiber%d_amp%d.dat", sim_path, myinner, myfiber, amp_ind)
		Saving_Runtime()
	}
}

// ***************************************************************************

trun = startsw()

// Start execute loop on the workers
// {pc.runworker()}
// Code beyond this point (til pc.done()) is only executed by the master.
// The master must now post jobs to the bulletin board.

//proc batchrun() {local inner_ind, fiber_ind, Vefreq_ind, stimamp_ind, pw_ind, isi_ind
proc batchrun() {local stimamp_ind
	for stimamp_ind = 0, Namp-1 {
		//pc.submit("run_all",inner_ind,fiber_ind,Vefreq_values.x[Vefreq_ind],stimamp_values.x[stimamp_ind],pw_values.x[pw_ind],isi_values.x[isi_ind])
		run_all(inner_ind, fiber_ind, stimamp_values.x[stimamp_ind],  stimamp_ind)
	}
}

batchrun()


// Save the runtime to a file
// objref f_runtime
// f_runtime = new File()
// f_runtime.wopen("..//%s//data//outputs//run_time.dat", sim_path)
// f_runtime.printf("Run time: %f seconds", startsw()-trun)
// f_runtime.close()
// print "Run time: ", startsw()-trun, "seconds"

// {pc.done()}

quit()
